---
API: 2.1
OpenSesame: 3.3.3
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title 1_sec
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family serif
set font_bold no
set experiment_path "/Volumes/GoogleDrive/My Drive/scholieren_academie/1_sec"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background white

define advanced_delay ITI
	set jitter_mode Uniform
	set jitter 1000
	set duration 1500
	set description "Waits for a specified duration"

define sketchpad block_begin
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Genoeg geoefend, we gaan beginnen! <br /><br />Je blijft gewoon hetzelfde doen als tijdens<br />het oefenen.<br /><br />Druk op de ENTER om door te <br />gaan met het experiment" x=0 y=0 z_index=0

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first no
	set break_if never
	setcycle 0 practice yes
	setcycle 0 block_repeat 10
	setcycle 1 practice no
	setcycle 1 block_repeat 20
	run block_procedure

define sequence block_procedure
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_begin "[practice] = no"
	run continue "[practice] = no"
	run trial_loop always

define keyboard_response continue
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response ENTER
	set allowed_responses ENTER

define sketchpad end_of_experiment
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=38 html=yes show_if=always text="Klaar! Druk op ENTER om weer <br />naar het menu terug te gaan." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructie always
	run continue always
	run task_loop always
	run end_of_experiment always
	run continue always

define keyboard_response fb_skip
	set timeout 6000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response SPACE
	set allowed_responses SPACE

define feedback feedback
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw circle color=red fill=1 penwidth=0 r=50 show_if="[response_time_keyboard_resp] > 2000 and [response_time_keyboard_resp] < 400" x=0 y=0 z_index=0
	draw circle color=red fill=1 penwidth=0 r=50 show_if="[response_time_keyboard_resp] > 2000 and [response_time_keyboard_resp] < 400" x=0 y=0 z_index=0
	draw circle color=gray fill=1 penwidth=0 r=50 show_if="[response_time_keyboard_resp] < 2000 and [response_time_keyboard_resp] > 400" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if="[practice] = yes" text="Wanneer de cirkel geel wordt probeer jij <br />precies 1 seconde later op de spatiebalk <br />te drukken. <br />" x=0 y=160 z_index=0
	draw textline center=1 color=red font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if="[response_time_keyboard_resp] > 2000 and [response_time_keyboard_resp] < 4990" text="Dat was wel een hele lange seconde!<br /><br />oefen het nog een keer (druk op spatiebalk)" x=0 y=256 z_index=0
	draw textline center=1 color=red font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if="[response_time_keyboard_resp] < 400" text="Dat was wel een hele korte seconde!<br /><br />oefen het nog een keer (druk op spatiebalk)" x=0 y=256 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if="[response_time_keyboard_resp] < 2000 and [response_time_keyboard_resp] > 400" text="oefen het nog een keer (druk op spatiebalk)" x=0 y=256 z_index=0
	draw textline center=1 color=red font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if="[response_time_keyboard_resp] > 4990" text="Je hebt niet gereageerd :-(<br /><br />oefen het nog een keer (druk op spatiebalk)" x=0 y=256 z_index=0
	draw rect color="#108001" fill=1 h=32 penwidth=1 show_if=always w="[progbar]" x=-225 y=-160 z_index=0
	draw rect color=black fill=0 h=32 penwidth=3 show_if=always w=450 x=-225 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="[progperc]%" x=-260 y=-146 z_index=0

define sketchpad fixation
	set duration 500
	set description "Displays stimuli"
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw circle color=gray fill=1 penwidth=0 r=50 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if="[practice] = yes" text="Wanneer de cirkel geel wordt probeer jij <br />precies 1 seconde later op de spatiebalk <br />te drukken. <br />" x=0 y=160 z_index=0
	draw rect color="#108001" fill=1 h=32 penwidth=1 show_if=always w="[progbar]" x=-225 y=-160 z_index=0
	draw rect color=black fill=0 h=32 penwidth=3 show_if=always w=450 x=-225 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="[progperc]%" x=-260 y=-146 z_index=0

define sketchpad instructie
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Experiment:<br /><br />Hoe lang duurt eigenlijk 1 seconde volgens jou? <br /><br />Wanneer de cirkel geel wordt probeer jij <br />precies <u><span style='font-size:30px;'>1 seconde</span></u> later op de <u><span style='font-size:30px;'>SPATIEBALK</span></u> <br />te drukken. <br /><br />Druk nu op de <u><span style='font-size:30px;'>ENTER</span></u> om het een paar <br />keer te proberen." x=0 y=0 z_index=0

define sketchpad inter_trial
	set duration 0
	set description "Displays stimuli"
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if="[practice] = yes" text="Wanneer de cirkel geel wordt probeer jij <br />precies 1 seconde later op de spatiebalk <br />te drukken. <br />" x=0 y=160 z_index=0
	draw rect color="#108001" fill=1 h=32 penwidth=1 show_if=always w="[progbar]" x=-225 y=-160 z_index=0
	draw rect color=black fill=0 h=32 penwidth=3 show_if=always w=450 x=-225 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="[progperc]%" x=-260 y=-146 z_index=0

define keyboard_response keyboard_resp
	set timeout 5000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response SPACE
	set allowed_responses SPACE

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define inline_javascript new_inline_javascript
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.progbar = 450/vars.total_trials * (vars.count_trial_procedure + 1)
	vars.progperc = Math.round((vars.count_trial_procedure+1) / vars.total_trials * 100)
	__end__
	set _prepare ""

define sketchpad reproduction
	set duration 0
	set description "Displays stimuli"
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw circle color=yellow fill=1 penwidth=0 r=50 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if="[practice] = yes" text="Wanneer de cirkel geel wordt probeer jij <br />precies 1 seconde later op de spatiebalk <br />te drukken. <br />" x=0 y=160 z_index=0
	draw rect color="#108001" fill=1 h=32 penwidth=1 show_if=always w="[progbar]" x=-225 y=-160 z_index=0
	draw rect color=black fill=0 h=32 penwidth=3 show_if=always w=450 x=-225 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="[progperc]%" x=-260 y=-146 z_index=0

define loop task_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if never
	setcycle 0 rt 0
	setcycle 0 total_trials 30
	setcycle 0 progperc 0
	setcycle 0 progbar 0
	run task_procedure

define sequence task_procedure
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_loop always

define loop trial_loop
	set source_file ""
	set source table
	set repeat "[block_repeat]"
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if never
	setcycle 0 empty_column ""
	run trial_procedure

define sequence trial_procedure
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inter_trial always
	run ITI always
	run fixation always
	run reproduction always
	run new_inline_javascript always
	run keyboard_resp always
	run feedback "[practice] = yes"
	run fb_skip "[practice] = yes"
	run logger always

