---
API: 2.1
OpenSesame: 3.3.3
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title context_taak
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family serif
set font_bold no
set experiment_path "/Volumes/GoogleDrive/My Drive/scholieren_academie/context"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background white

define advanced_delay ISI
	set jitter_mode Uniform
	set jitter 1000
	set duration 1000
	set description "Waits for a specified duration"

define advanced_delay ITI
	set jitter_mode Uniform
	set jitter 1000
	set duration 1000
	set description "Waits for a specified duration"

define sketchpad block_begin
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Ben je klaar voor het volgende gedeelte van het experiment?<br /><br />Druk op de ENTER om door te gaan" x=0 y=0 z_index=0

define loop block_loop_LLSS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first no
	set break_if never
	setcycle 0 practice yes
	setcycle 0 context 0
	setcycle 0 long_dur 500
	setcycle 0 short_dur 1500
	setcycle 0 block_repeat 5
	setcycle 1 practice no
	setcycle 1 context long
	setcycle 1 long_dur 1300
	setcycle 1 short_dur 900
	setcycle 1 block_repeat 12
	setcycle 2 practice no
	setcycle 2 context short
	setcycle 2 long_dur 900
	setcycle 2 short_dur 625
	setcycle 2 block_repeat 12
	run block_procedure

define sequence block_procedure
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_begin "[practice] = no"
	run continue "[practice] = no"
	run practice_begin "[practice] = yes"
	run continue "[practice] = yes"
	run trial_loop always
	run practice_end "[practice] = yes"
	run continue "[practice] = yes"

define keyboard_response continue
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response ENTER
	set allowed_responses ENTER

define sketchpad duration
	set duration "[exp_dur]"
	set description "Displays stimuli"
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw circle color="#fd8008" fill=1 penwidth=0 r=50 show_if=always x=0 y=0 z_index=0
	draw rect color="#108001" fill=1 h=32 penwidth=1 show_if=always w="[progbar]" x=-225 y=-160 z_index=0
	draw rect color=black fill=0 h=32 penwidth=3 show_if=always w=450 x=-225 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="[progperc]%" x=-260 y=-146 z_index=0

define sketchpad end_of_experiment
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=38 html=yes show_if=always text="Klaar! Druk op ENTER <br />om weer naar het menu terug te gaan." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructie always
	run continue always
	run task_loop always
	run end_of_experiment always
	run continue always

define feedback feedback
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw textline center=1 color="[feedback_color]" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="[feedback_text]" x=0 y=0 z_index=0
	draw rect color="#108001" fill=1 h=32 penwidth=1 show_if=always w="[progbar]" x=-225 y=-160 z_index=0
	draw rect color=black fill=0 h=32 penwidth=3 show_if=always w=450 x=-225 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="[progperc]%" x=-260 y=-146 z_index=0

define sketchpad fixation
	set duration 500
	set description "Displays stimuli"
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw circle color=gray fill=1 penwidth=0 r=50 show_if=always x=0 y=0 z_index=0
	draw rect color="#108001" fill=1 h=32 penwidth=1 show_if=always w="[progbar]" x=-225 y=-160 z_index=0
	draw rect color=black fill=0 h=32 penwidth=3 show_if=always w=450 x=-225 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="[progperc]%" x=-260 y=-146 z_index=0

define inline_javascript init_feedback
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.rt = vars.response_time_reproduction
	
	if(vars.rt < vars.exp_dur * .85) {
		vars.feedback_text = "Iets te vroeg gedrukt"
		vars.feedback_color = "red"
	} else if(vars.rt > vars.exp_dur * 1.15) {
		vars.feedback_text = "Iets te laat gedrukt"
		vars.feedback_color = "red"
	} else {
		vars.feedback_text = "Precies op tijd!"
		vars.feedback_color = "green"
	}
	
	vars.progbar = 450/vars.total_trials * (vars.count_trial_procedure + 1)
	vars.progperc = Math.round((vars.count_trial_procedure+1) / vars.total_trials * 100)
	__end__
	set _prepare ""

define sketchpad instructie
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Je ziet straks elke ronde de cirkel op het scherm oranje worden, <br />en daarna <u><span style='font-size:30px;'>vanzelf</span></u> weer grijs. Probeer te onthouden hoelang hij oranje was. <br /><br />Daarna wordt hij vanzelf geel, maar nu wordt hij pas weer grijs als jij <br />op de <u><span style='font-size:30px;'>SPATIEBALK</span></u> drukt. Probeer <u><span style='font-size:30px;'>precies even lang</span></u> te wachten als <br />toen de cirkel oranje werd. <br /><br />Eerst kun je 10 keer oefenen. Druk op de <u><span style='font-size:30px;'>ENTER</span></u> om te beginnen.<br /><br />" x=0 y=0 z_index=0

define sketchpad inter_stimulus
	set duration 0
	set description "Displays stimuli"
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw circle color=gray fill=1 penwidth=0 r=50 show_if=always x=0 y=0 z_index=0
	draw rect color="#108001" fill=1 h=32 penwidth=1 show_if=always w="[progbar]" x=-225 y=-160 z_index=0
	draw rect color=black fill=0 h=32 penwidth=3 show_if=always w=450 x=-225 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="[progperc]%" x=-260 y=-146 z_index=0

define sketchpad inter_trial
	set duration 0
	set description "Displays stimuli"
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0
	draw rect color="#108001" fill=1 h=32 penwidth=1 show_if=always w="[progbar]" x=-225 y=-160 z_index=0
	draw rect color=black fill=0 h=32 penwidth=3 show_if=always w=450 x=-225 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="[progperc]%" x=-260 y=-146 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad practice_begin
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Ben je klaar er klaar voor?<br /><br />Druk op de ENTER om door te gaan" x=0 y=0 z_index=0

define sketchpad practice_end
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=38 html=yes show_if=always text="Genoeg geoefend, we gaan beginnen!<br /><br />Druk op de ENTER om door te gaan" x=0 y=0 z_index=0

define sketchpad reproduction
	set duration keypress
	set description "Displays stimuli"
	draw rect color="#c9cbcb" fill=1 h=32 penwidth=1 show_if=always w=450 x=-225 y=-160 z_index=1
	draw circle color=yellow fill=1 penwidth=0 r=50 show_if=always x=0 y=0 z_index=0
	draw rect color="#108001" fill=1 h=32 penwidth=1 show_if=always w="[progbar]" x=-225 y=-160 z_index=0
	draw rect color=black fill=0 h=32 penwidth=3 show_if=always w=450 x=-225 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="[progperc]%" x=-260 y=-146 z_index=0

define loop task_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if never
	setcycle 0 rt 0
	setcycle 0 total_trials 58
	setcycle 0 progperc 0
	setcycle 0 progbar 0
	run task_procedure

define sequence task_procedure
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_loop_LLSS always

define loop trial_loop
	set source_file ""
	set source table
	set repeat "[block_repeat]"
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first no
	set break_if never
	setcycle 0 duration long
	setcycle 0 exp_dur "[long_dur]"
	setcycle 1 duration short
	setcycle 1 exp_dur "[short_dur]"
	run trial_procedure

define sequence trial_procedure
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inter_trial always
	run ITI always
	run fixation always
	run duration always
	run inter_stimulus always
	run ISI always
	run reproduction always
	run init_feedback always
	run feedback "[practice] = 'yes'"
	run logger always

